
#=====================================================
# PHYSICAL PROCESSES
#=====================================================

# TASK
# BASED ON THE SPECT PHYSICS LIST
# DEFINE A LIST OF PROCESSES FOR COMPTON CAMERA APPLICATIONS

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess GammaConversion
/gate/physics/processes/GammaConversion/setModel StandardModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation e+
#/gate/physics/addProcess G4PositronAnnihilation e+
#/gate/physics/processes/G4PositronAnnihilation/setModel StandardModel

/gate/physics/addProcess eMultipleScattering e+

/gate/physics/addProcess eMultipleScattering e-

#/gate/physics/processList Enabled
#/gate/physics/processList Initialized

#=====================================================
# CUTS
#=====================================================

# TASK
# DEFINE A CUT VALUE TO LIMIT THE PRODUCTION OF 
# SECONDARY PHOTON AND ELECTRON IN THE DETECTOR
#
#/gate/physics/Gamma/SetCutInRegion      crystalUnit 1.0 cm
#/gate/physics/Electron/SetCutInRegion   crystalUnit 1.0 cm


